PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 0
  Units = height
  Window size (pixels) = (1200, 800)
  color = $(1.0000, 1.0000, 1.0000)
  expName = gurung_120_v1
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Instructions
    RoutineSettingsComponent Instructions
      color = $[1,1,1]
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    ImageComponent Instructions_keep_alive
      image = Stimuli/sound.png
      opacity = 0
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    CodeComponent instructions_code
      Code Type = Py
      Begin Experiment:
        from pathlib import Path
        import gc
        import queue
        import threading

        try:
            from psychopy.hardware.speaker import SpeakerDevice
        except Exception as _gurung_speaker_import_error:
            SpeakerDevice = None
            print("SpeakerDevice import failed:", _gurung_speaker_import_error)

        try:
            import numpy as _gurung_np
            import sounddevice as _gurung_sd
            import soundfile as _gurung_sf
            G_RECORDING_AVAILABLE = True
        except Exception as _gurung_recording_error:
            G_RECORDING_AVAILABLE = False
            print("Audio recording is unavailable:", _gurung_recording_error)

        G_ROOT = Path(_thisDir)
        G_DATA_DIR = G_ROOT / "data"
        G_RECORDINGS_DIR = G_ROOT / "recordings"
        G_DEBUG_LOG = G_ROOT / "debug_gurung_runtime.log"
        G_DATA_DIR.mkdir(exist_ok=True)
        G_RECORDINGS_DIR.mkdir(exist_ok=True)
        G_IMAGE_SIZE = (0.2333333333, 0.35)
        G_ARROW_SIZE = (0.035, 0.035)
        G_STEP = 0.27
        G_MAIN_TRIAL_INDEX = 0
        G_PRACTICE_TRIAL_INDEX = 0
        G_SPEAKER = None
        G_FULLSCREEN_CACHE = {}


        def g_log(message):
            text = f"{core.getTime():.3f} {message}"
            print(text)
            try:
                with G_DEBUG_LOG.open("a", encoding="utf-8") as handle:
                    handle.write(text + "\n")
            except Exception:
                pass

        try:
            event.globalKeys.add(key="escape", func=core.quit, name="gurung_escape_quit")
        except Exception as _gurung_global_key_error:
            g_log(f"Global escape key was not registered: {_gurung_global_key_error}")


        def g_is_blank(value):
            if value is None:
                return True
            text = str(value).strip()
            return text == "" or text.lower() in {"none", "nan", "null"}


        def g_text(value):
            if g_is_blank(value):
                return ""
            return str(value).strip()


        def g_float(value, default=0.0):
            if g_is_blank(value):
                return default
            try:
                return float(value)
            except Exception:
                return default


        def g_int(value, default=0):
            if g_is_blank(value):
                return default
            try:
                return int(float(value))
            except Exception:
                return default


        def g_path(value):
            value = g_text(value)
            if not value:
                return ""
            path = Path(value)
            if path.is_absolute():
                return str(path)
            return str(G_ROOT / path)


        def g_fullscreen_size(win):
            try:
                return (float(win.size[0]) / float(win.size[1]), 1.0)
            except Exception:
                return (1.5, 1.0)


        def g_fullscreen_image(win, image_value):
            path = g_path(image_value)
            stim = G_FULLSCREEN_CACHE.get(path)
            if stim is None:
                g_log(f"load_fullscreen_image {path}")
                stim = visual.ImageStim(
                    win,
                    image=path,
                    pos=(0, 0),
                    size=g_fullscreen_size(win),
                    interpolate=True,
                )
                G_FULLSCREEN_CACHE[path] = stim
            return stim


        def g_choose_speaker():
            if SpeakerDevice is None:
                return None
            try:
                devices = SpeakerDevice.getAvailableDevices()
            except Exception as err:
                g_log(f"Could not list speaker devices: {err}")
                return None
            names = [g_text(device.get("deviceName") or device.get("name")) for device in devices]
            g_log(f"Available speaker devices: {names}")
            virtual_terms = ("blackhole", "soundflower", "loopback", "aggregate", "zoom", "teams")
            preferred = []
            fallback = []
            for device in devices:
                name = g_text(device.get("deviceName") or device.get("name"))
                if not name:
                    continue
                if any(term in name.lower() for term in virtual_terms):
                    fallback.append(name)
                else:
                    preferred.append(name)
            for name in preferred + fallback:
                try:
                    speaker = SpeakerDevice(name=name, latencyClass=0)
                    g_log(f"Using speaker device: {speaker.name}")
                    return speaker
                except Exception as err:
                    g_log(f"Could not open speaker {name!r}: {err}")
            g_log("No usable speaker found; PsychoPy will use its default audio device.")
            return None


        G_SPEAKER = g_choose_speaker()


        def g_safe(value):
            text = "".join(ch if ch.isalnum() or ch in "._-" else "_" for ch in str(value))
            while "__" in text:
                text = text.replace("__", "_")
            return text.strip("._") or "item"


        def g_roles_and_paths():
            roles = []
            paths = []
            for idx in range(1, 5):
                image_value = globals().get(f"img{idx}", "")
                role_value = globals().get(f"img{idx}_role", f"img{idx}")
                if not g_is_blank(image_value):
                    paths.append(g_path(image_value))
                    roles.append(g_text(role_value) or f"img{idx}")
            return roles, paths


        def g_positions_for_roles(roles):
            target_index = None
            for target_role in ("tr_target", "it_target"):
                if target_role in roles:
                    target_index = roles.index(target_role)
                    break
            if target_index is None:
                target_index = (len(roles) - 1) / 2
            return [((idx - target_index) * G_STEP, 0) for idx in range(len(roles))]


        def g_make_sequence(win, roles, paths):
            g_log(f"make_sequence roles={roles} paths={paths}")
            positions = g_positions_for_roles(roles)
            images = []
            for path, pos in zip(paths, positions):
                images.append(visual.ImageStim(win, image=path, pos=pos, size=G_IMAGE_SIZE, interpolate=True))
            arrows = []
            arrow_path = g_path("Stimuli/arrow.png")
            for left, right in zip(positions, positions[1:]):
                arrows.append(
                    visual.ImageStim(
                        win,
                        image=arrow_path,
                        pos=((left[0] + right[0]) / 2, 0),
                        size=G_ARROW_SIZE,
                        interpolate=True,
                    )
                )
            return images, arrows


        def g_release_stims(*groups):
            for group in groups:
                if not group:
                    continue
                for stim in group:
                    try:
                        clear_textures = getattr(stim, "clearTextures", None)
                        if clear_textures is not None:
                            clear_textures()
                    except Exception as err:
                        g_log(f"stim_release_warning {err}")
            gc.collect()


        def g_draw_sequence(images, arrows, reveal_count):
            win.color = "white"
            for idx in range(reveal_count):
                images[idx].draw()
            for idx in range(max(0, reveal_count - 1)):
                arrows[idx].draw()


        def g_play_audio(path_value):
            path = g_path(path_value)
            if not path:
                return None
            g_log(f"play_audio {path}")
            if G_SPEAKER is not None:
                audio = sound.Sound(path, speaker=G_SPEAKER)
            else:
                audio = sound.Sound(path)
            audio.play()
            return audio


        class GRecorder:
            def __init__(self, root):
                self.root = Path(root)
                self.root.mkdir(exist_ok=True)
                self.stream = None
                self.frames = []
                self.path = None
                self.write_queue = queue.Queue()
                self.writer = threading.Thread(target=self._writer_loop, daemon=True)
                self.writer.start()

            def start(self, stem):
                self.stop()
                if not G_RECORDING_AVAILABLE:
                    return ""
                self._ensure_stream()
                self.frames = []
                self.path = self.root / f"{g_safe(stem)}.wav"
                g_log(f"rec_segment_start {self.path}")
                return str(self.path)

            def _ensure_stream(self):
                if self.stream is not None:
                    return

                def callback(indata, frames, time_info, status):
                    if status:
                        g_log(f"rec_callback_status {status}")
                    if self.path is not None:
                        self.frames.append(indata.copy())

                g_log("rec_stream_open_start")
                self.stream = _gurung_sd.InputStream(
                    samplerate=48000,
                    channels=1,
                    dtype="float32",
                    callback=callback,
                )
                self.stream.start()
                g_log("rec_stream_open_done")

            def stop(self):
                path = self.path
                frames = self.frames
                self.path = None
                self.frames = []
                if path and frames:
                    g_log(f"rec_segment_queue_write {path} frames={len(frames)}")
                    self.write_queue.put((str(path), frames))
                    return str(path)
                return ""

            def _writer_loop(self):
                while True:
                    item = self.write_queue.get()
                    if item is None:
                        return
                    path, frames = item
                    try:
                        audio = _gurung_np.concatenate(frames, axis=0)
                        _gurung_sf.write(path, audio, 48000)
                        g_log(f"rec_segment_written {path}")
                    except Exception as err:
                        g_log(f"rec_segment_write_failed {path}: {err}")

            def abort(self):
                self.stop()
                stream = self.stream
                self.stream = None
                if stream is not None:
                    def close_stream():
                        try:
                            g_log("rec_stream_abort_start")
                            stream.abort()
                            g_log("rec_stream_abort_done")
                        except Exception as err:
                            g_log(f"rec_stream_abort_failed {err}")
                        try:
                            stream.close()
                            g_log("rec_stream_close_done")
                        except Exception as err:
                            g_log(f"rec_stream_close_failed {err}")

                    threading.Thread(target=close_stream, daemon=True).start()


        def g_cleanup():
            try:
                G_RECORDER.abort()
            except Exception as err:
                g_log(f"Recorder cleanup failed: {err}")
            try:
                if G_SPEAKER is not None:
                    G_SPEAKER.close()
            except Exception as err:
                g_log(f"Speaker cleanup failed: {err}")


        G_RECORDER = GRecorder(G_RECORDINGS_DIR)
      Begin Routine:
        win.color = "white"
        instruction_icon = visual.ImageStim(win, image=g_path("Stimuli/sound.png"), pos=(0, 0), size=(0.22, 0.22), interpolate=True)
        instruction_audio = g_play_audio("Audio/sequence_instr.wav")
        event.clearEvents()
      Each Frame:
        instruction_icon.draw()
        keys = event.getKeys(keyList=["space", "return", "escape"])
        if "escape" in keys:
            core.quit()
        if "return" in keys:
            if instruction_audio:
                instruction_audio.stop()
            instruction_audio = g_play_audio("Audio/sequence_instr.wav")
        if "space" in keys:
            if instruction_audio:
                instruction_audio.stop()
            continueRoutine = False
  Routine PracticeTrial
    RoutineSettingsComponent PracticeTrial
      color = $[1,1,1]
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    ImageComponent PracticeTrial_keep_alive
      image = Stimuli/sound.png
      opacity = 0
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    CodeComponent practice_trial_code
      Code Type = Py
      Begin Routine:
        G_PRACTICE_TRIAL_INDEX += 1
        win.color = "white"
        practice_roles, practice_paths = g_roles_and_paths()
        practice_images, practice_arrows = g_make_sequence(win, practice_roles, practice_paths)
        practice_segment = 0
        practice_phase = "between"
        practice_placeholder = g_fullscreen_image(win, between_image)
        practice_between_clock = core.Clock()
        practice_audio = None
        practice_audio_clock = core.Clock()
        practice_audio_duration = 0
        thisExp.addData("practice_trial_index", G_PRACTICE_TRIAL_INDEX)
        thisExp.addData("practice_between_image", g_path(between_image))
        event.clearEvents()
      Each Frame:
        if practice_phase == "between":
            practice_placeholder.draw()
            keys = event.getKeys(keyList=["space", "escape"])
            if "escape" in keys:
                G_RECORDER.abort()
                core.quit()
            if "space" in keys:
                thisExp.addData("practice_between_rt", practice_between_clock.getTime())
                practice_phase = "segment"
                practice_stem = f"{expInfo['participant']}_practice_{G_PRACTICE_TRIAL_INDEX:02d}_pic{practice_segment + 1:02d}_{practice_roles[practice_segment]}"
                G_RECORDER.start(practice_stem)
                event.clearEvents()
        elif practice_phase == "segment":
            g_draw_sequence(practice_images, practice_arrows, practice_segment + 1)
            keys = event.getKeys(keyList=["space", "escape"])
            if "escape" in keys:
                G_RECORDER.abort()
                core.quit()
            if "space" in keys:
                audio_file = G_RECORDER.stop()
                seg = practice_segment + 1
                thisExp.addData(f"practice_seg{seg}_role", practice_roles[practice_segment])
                thisExp.addData(f"practice_seg{seg}_audio", audio_file)
                if practice_segment >= len(practice_images) - 1:
                    continueRoutine = False
                else:
                    practice_segment += 1
                    if practice_segment == 2:
                        practice_phase = "practice_audio"
                        practice_audio = g_play_audio("Audio/tsakyali.wav")
                        practice_audio_clock.reset()
                        practice_audio_duration = practice_audio.getDuration() if practice_audio else 0
                    else:
                        practice_stem = f"{expInfo['participant']}_practice_{G_PRACTICE_TRIAL_INDEX:02d}_pic{practice_segment + 1:02d}_{practice_roles[practice_segment]}"
                        G_RECORDER.start(practice_stem)
                event.clearEvents()
        elif practice_phase == "practice_audio":
            g_draw_sequence(practice_images, practice_arrows, 2)
            if practice_audio_clock.getTime() >= practice_audio_duration:
                practice_phase = "segment"
                practice_stem = f"{expInfo['participant']}_practice_{G_PRACTICE_TRIAL_INDEX:02d}_pic{practice_segment + 1:02d}_{practice_roles[practice_segment]}"
                G_RECORDER.start(practice_stem)
                event.clearEvents()
      End Routine:
        G_RECORDER.stop()
        if practice_audio:
            practice_audio.stop()
        g_release_stims(practice_images, practice_arrows)
        practice_images = []
        practice_arrows = []
  Routine PracticeEnd
    RoutineSettingsComponent PracticeEnd
      color = $[1,1,1]
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    ImageComponent PracticeEnd_keep_alive
      image = Stimuli/sound.png
      opacity = 0
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    CodeComponent practice_end_code
      Code Type = Py
      Begin Routine:
        win.color = "white"
        practice_done_icon = visual.ImageStim(win, image=g_path("Stimuli/sound.png"), pos=(0, 0), size=(0.22, 0.22), interpolate=True)
        practice_done_audio = g_play_audio("Audio/practice_end.wav")
        event.clearEvents()
      Each Frame:
        practice_done_icon.draw()
        keys = event.getKeys(keyList=["space", "escape"])
        if "escape" in keys:
            core.quit()
        if "space" in keys:
            if practice_done_audio:
                practice_done_audio.stop()
            continueRoutine = False
  Routine MainTrial
    RoutineSettingsComponent MainTrial
      color = $[1,1,1]
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    ImageComponent MainTrial_keep_alive
      image = Stimuli/sound.png
      opacity = 0
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    CodeComponent main_trial_code
      Code Type = Py
      Begin Routine:
        G_MAIN_TRIAL_INDEX += 1
        win.color = "white"
        main_roles, main_paths = g_roles_and_paths()
        main_images, main_arrows = g_make_sequence(win, main_roles, main_paths)
        main_segment = 0
        main_phase = "between"
        main_between_clock = core.Clock()
        main_between_audio = None
        main_between_audio_value = g_text(globals().get("between_audio", ""))
        main_audio_lock = g_float(globals().get("between_audio_lock_sec", 0), 0.0)
        main_placeholder = g_fullscreen_image(win, between_image)
        main_dataset_number = g_int(globals().get("dataset_number", 0), 0)
        main_condition_id = g_text(globals().get("condition_id", "unknown_condition"))
        if main_between_audio_value:
            main_between_audio = g_play_audio(main_between_audio_value)
        main_between_clock.reset()
        thisExp.addData("main_trial_index", G_MAIN_TRIAL_INDEX)
        thisExp.addData("between_image", g_path(between_image))
        thisExp.addData("audio_probe", audio_probe)
        thisExp.addData("between_audio", g_path(main_between_audio_value) if main_between_audio_value else "")
        event.clearEvents()
      Each Frame:
        if main_phase == "between":
            main_placeholder.draw()
            keys = event.getKeys(keyList=["space", "escape"])
            if "escape" in keys:
                G_RECORDER.abort()
                core.quit()
            if "space" in keys and main_between_clock.getTime() >= main_audio_lock:
                if main_between_audio:
                    main_between_audio.stop()
                thisExp.addData("between_rt", main_between_clock.getTime())
                main_phase = "segment"
                main_stem = f"{expInfo['participant']}_main_imageset{main_dataset_number:02d}_condition_{main_condition_id}_pic{main_segment + 1:02d}_{main_roles[main_segment]}"
                G_RECORDER.start(main_stem)
                event.clearEvents()
        elif main_phase == "segment":
            g_draw_sequence(main_images, main_arrows, main_segment + 1)
            keys = event.getKeys(keyList=["space", "escape"])
            if "escape" in keys:
                G_RECORDER.abort()
                core.quit()
            if "space" in keys:
                audio_file = G_RECORDER.stop()
                seg = main_segment + 1
                thisExp.addData(f"seg{seg}_role", main_roles[main_segment])
                thisExp.addData(f"seg{seg}_audio", audio_file)
                if main_segment >= len(main_images) - 1:
                    continueRoutine = False
                else:
                    main_segment += 1
                    main_stem = f"{expInfo['participant']}_main_imageset{main_dataset_number:02d}_condition_{main_condition_id}_pic{main_segment + 1:02d}_{main_roles[main_segment]}"
                    G_RECORDER.start(main_stem)
                event.clearEvents()
      End Routine:
        G_RECORDER.stop()
        if main_between_audio:
            main_between_audio.stop()
        g_release_stims(main_images, main_arrows)
        main_images = []
        main_arrows = []
  Routine Break
    RoutineSettingsComponent Break
      color = $[1,1,1]
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    ImageComponent Break_keep_alive
      image = Stimuli/sound.png
      opacity = 0
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    CodeComponent break_code
      Code Type = Py
      Begin Routine:
        win.color = "white"
        break_image = visual.ImageStim(win, image=g_path("Stimuli/break.png"), pos=(0, 0), size=(0.55, 0.55), interpolate=True)
        break_clock = core.Clock()
        event.clearEvents()
      Each Frame:
        break_image.draw()
        keys = event.getKeys(keyList=["space", "escape"])
        if "escape" in keys:
            core.quit()
        if "space" in keys and break_clock.getTime() >= 30:
            continueRoutine = False
  Routine EndExperiment
    RoutineSettingsComponent EndExperiment
      color = $[1,1,1]
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    ImageComponent EndExperiment_keep_alive
      image = Stimuli/sound.png
      opacity = 0
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    CodeComponent end_code
      Code Type = Py
      Begin Routine:
        win.color = "white"
        finish_image = visual.ImageStim(win, image=g_path("Stimuli/finish.png"), pos=(0, 0), size=(0.55, 0.55), interpolate=True)
        finish_clock = core.Clock()
        event.clearEvents()
      Each Frame:
        finish_image.draw()
        keys = event.getKeys(keyList=["space", "escape"])
        if "escape" in keys or "space" in keys or finish_clock.getTime() >= 10:
            g_cleanup()
            continueRoutine = False
Flow
  Routine Instructions
  LoopInitiator PracticeLoop loopType="TrialHandler"
    conditionsFile = Conds/practice.csv
    loopType = sequential
    nReps = 1
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    Routine PracticeTrial
  LoopTerminator PracticeLoop
  Routine PracticeEnd
  LoopInitiator MainBlock1 loopType="TrialHandler"
    conditionsFile = Conds/main_block1.csv
    loopType = sequential
    nReps = 1
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    Routine MainTrial
  LoopTerminator MainBlock1
  Routine Break
  LoopInitiator MainBlock2 loopType="TrialHandler"
    conditionsFile = Conds/main_block2.csv
    loopType = sequential
    nReps = 1
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    Routine MainTrial
  LoopTerminator MainBlock2
  Routine Break
  LoopInitiator MainBlock3 loopType="TrialHandler"
    conditionsFile = Conds/main_block3.csv
    loopType = sequential
    nReps = 1
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    Routine MainTrial
  LoopTerminator MainBlock3
  Routine EndExperiment
